---
API: 3
OpenSesame: 4.0.29
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Reward capture"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_end_redirect_url ""
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "E:\\APP\\jatos_win_java\\study_assets_root\\36f730bc-8753-f5a8-d93b-ee6c4aa04723"
set disable_garbage_collection True
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background gray

define feedback block_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=true text="Break<br /><br />In the last block<br />your average reaction time was [avg_rt] ms<br />and your accuracy was [acc]%<br /><br />Press any key to continue" x=0 y=0 z_index=0

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if false
	setcycle 0 color1 yellow
	setcycle 0 color2 blue
	setcycle 0 color3 blue
	setcycle 0 color4 blue
	setcycle 0 color5 blue
	setcycle 0 color6 blue
	setcycle 0 letter1 "◐"
	setcycle 0 letter2 "◒"
	setcycle 0 letter3 "◒"
	setcycle 0 letter4 "◓"
	setcycle 0 letter5 "◓"
	setcycle 0 letter6 "◓"
	setcycle 0 points 1
	setcycle 0 correct_response left
	setcycle 0 smiley "😐"
	setcycle 1 color1 blue
	setcycle 1 color2 yellow
	setcycle 1 color3 yellow
	setcycle 1 color4 yellow
	setcycle 1 color5 yellow
	setcycle 1 color6 yellow
	setcycle 1 letter1 "◑"
	setcycle 1 letter2 "◒"
	setcycle 1 letter3 "◒"
	setcycle 1 letter4 "◒"
	setcycle 1 letter5 "◓"
	setcycle 1 letter6 "◓"
	setcycle 1 points 1
	setcycle 1 correct_response right
	setcycle 1 smiley "😐"
	setcycle 2 color1 yellow
	setcycle 2 color2 blue
	setcycle 2 color3 blue
	setcycle 2 color4 blue
	setcycle 2 color5 blue
	setcycle 2 color6 blue
	setcycle 2 letter1 "◐"
	setcycle 2 letter2 "◒"
	setcycle 2 letter3 "◒"
	setcycle 2 letter4 "◓"
	setcycle 2 letter5 "◓"
	setcycle 2 letter6 "◓"
	setcycle 2 points 10
	setcycle 2 correct_response left
	setcycle 2 smiley "😄"
	setcycle 3 color1 blue
	setcycle 3 color2 yellow
	setcycle 3 color3 yellow
	setcycle 3 color4 yellow
	setcycle 3 color5 yellow
	setcycle 3 color6 yellow
	setcycle 3 letter1 "◑"
	setcycle 3 letter2 "◒"
	setcycle 3 letter3 "◒"
	setcycle 3 letter4 "◒"
	setcycle 3 letter5 "◓"
	setcycle 3 letter6 "◓"
	setcycle 3 points 10
	setcycle 3 correct_response right
	setcycle 3 smiley "😄"
	setcycle 4 color1 yellow
	setcycle 4 color2 blue
	setcycle 4 color3 blue
	setcycle 4 color4 blue
	setcycle 4 color5 blue
	setcycle 4 color6 blue
	setcycle 4 letter1 "◑"
	setcycle 4 letter2 "◒"
	setcycle 4 letter3 "◒"
	setcycle 4 letter4 "◓"
	setcycle 4 letter5 "◓"
	setcycle 4 letter6 "◓"
	setcycle 4 points 1
	setcycle 4 correct_response right
	setcycle 4 smiley "😐"
	setcycle 5 color1 blue
	setcycle 5 color2 yellow
	setcycle 5 color3 yellow
	setcycle 5 color4 yellow
	setcycle 5 color5 yellow
	setcycle 5 color6 yellow
	setcycle 5 letter1 "◐"
	setcycle 5 letter2 "◒"
	setcycle 5 letter3 "◒"
	setcycle 5 letter4 "◒"
	setcycle 5 letter5 "◓"
	setcycle 5 letter6 "◓"
	setcycle 5 points 1
	setcycle 5 correct_response left
	setcycle 5 smiley "😐"
	setcycle 6 color1 yellow
	setcycle 6 color2 blue
	setcycle 6 color3 blue
	setcycle 6 color4 blue
	setcycle 6 color5 blue
	setcycle 6 color6 blue
	setcycle 6 letter1 "◑"
	setcycle 6 letter2 "◒"
	setcycle 6 letter3 "◒"
	setcycle 6 letter4 "◓"
	setcycle 6 letter5 "◓"
	setcycle 6 letter6 "◓"
	setcycle 6 points 10
	setcycle 6 correct_response right
	setcycle 6 smiley "😄"
	setcycle 7 color1 blue
	setcycle 7 color2 yellow
	setcycle 7 color3 yellow
	setcycle 7 color4 yellow
	setcycle 7 color5 yellow
	setcycle 7 color6 yellow
	setcycle 7 letter1 "◐"
	setcycle 7 letter2 "◒"
	setcycle 7 letter3 "◒"
	setcycle 7 letter4 "◒"
	setcycle 7 letter5 "◓"
	setcycle 7 letter6 "◓"
	setcycle 7 points 10
	setcycle 7 correct_response left
	setcycle 7 smiley "😄"
	shuffle_horiz color1 color2 color3 color4 color5 color6
	shuffle_horiz letter1 letter2 letter3 letter4 letter5 letter6
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_loop true
	run block_feedback true

define sketchpad correct_feedback
	set duration 750
	set description "Displays stimuli"
	draw textline center=1 color="#8ae234" font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=true text="[smiley] +[points]" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run generate_identifier true
	run instructions true
	run experimental_loop true
	run finished true

define loop experimental_loop
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run block_sequence

define sketchpad finished
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=true text="The experiment is finished<br /><br/>This is your complete code:<br/>[identifier]<br/><br />Thank you for participating!<br /><br />Press any key to exit" x=0 y=0 z_index=0

define sketchpad fixation
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=true style=default x=0 y=0 z_index=0

define inline_javascript generate_identifier
	set description "Executes Python code"
	set _run ""
	___prepare__
	// Generate the identifier for the participant
	vars.identifier = Math.random().toString(36).substr(2, 9);
	__end__

define sketchpad get_ready
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=true text="Get ready!" x=0 y=-96 z_index=0
	draw fixdot color=white show_if=true style=default x=0 y=0 z_index=0

define sketchpad incorrect_feedback
	set duration 750
	set description "Displays stimuli"
	draw textline center=1 color="#ef2929" font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=true text="😣" x=0 y=0 z_index=0

define sequence instructions
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions_1 true
	run instructions_2 true
	run wait_right true
	run instructions_3 true
	run wait_left true
	run get_ready true

define sketchpad instructions_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="target-example.png" scale=1 show_if=true x=0 y=0 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=white fill=1 penwidth=1 show_if=true x1=-352 x2=-224 y1=-96 y2=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=true text=Target x=-384 y=-128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=true text="Instructions<br /><br />Find the vertical target!" x=0 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=true text="Press any key to continue" x=0 y=288 z_index=0

define sketchpad instructions_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=true text="INSTRUCTIONS<br /><br />Indicate the filled side of the target<br />Ignore the colors<br /><br />In this example<br />the filled side is on the right<br />so you press the right arrow key" x=0 y=-192 z_index=0
	draw image center=1 file="target-example.png" scale=0.6 show_if=true x=0 y=128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=true text="Press the right arrow key to continue" x=0 y=320 z_index=0

define sketchpad instructions_3
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=true text="INSTRUCTIONS<br /><br />Indicate the filled side of the target<br />Ignore the colors<br /><br />In this example<br />the filled side is on the left<br />so you press the left arrow key" x=0 y=-192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=true text="Press the left arrow key to continue" x=0 y=320 z_index=0
	draw image center=1 file="target-example-2.png" scale=0.6 show_if=true x=0 y=128 z_index=0

define keyboard_response keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "left;right"

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log sessionid
	log correct
	log response
	log response_time
	log correct_response
	log letter1
	log letter2
	log letter3
	log letter4
	log letter5
	log letter6
	log points
	log smiley
	log color1
	log color2
	log color3
	log color4
	log color5
	log color6
	log count_trial_sequence

define sketchpad search_display
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=true style=default x=0 y=0 z_index=0
	draw textline center=1 color="[color1]" font_bold=no font_family=serif font_italic=no font_size=64 html=yes show_if=true text="[letter1]" x=200 y=0 z_index=0
	draw textline center=1 color="[color2]" font_bold=no font_family=serif font_italic=no font_size=64 html=yes show_if=true text="[letter2]" x=100 y=173.205080757 z_index=0
	draw textline center=1 color="[color3]" font_bold=no font_family=serif font_italic=no font_size=64 html=yes show_if=true text="[letter3]" x=-100 y=173.205080757 z_index=0
	draw textline center=1 color="[color4]" font_bold=no font_family=serif font_italic=no font_size=64 html=yes show_if=true text="[letter4]" x=-200 y=2.44929359829e-14 z_index=0
	draw textline center=1 color="[color5]" font_bold=no font_family=serif font_italic=no font_size=64 html=yes show_if=true text="[letter5]" x=-100 y=-173.205080757 z_index=0
	draw textline center=1 color="[color6]" font_bold=no font_family=serif font_italic=no font_size=64 html=yes show_if=true text="[letter6]" x=100 y=-173.205080757 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation true
	run search_display true
	run keyboard_response true
	run correct_feedback "(vars.correct == 1)"
	run incorrect_feedback "(vars.correct == 0)"
	run logger true

define keyboard_response wait_left
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses left

define keyboard_response wait_right
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses right

